PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = visual search
  Screen = 1
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Routines
  Routine instruction
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You will see x or o in the experiment.
        They will be presented in different colors.
        Your task is to tell us whether the red x is presented
        Press "1" when it is presented, and press "4" when it not presented
        Press "space" to move on when you are ready
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 1
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  Routine experiment
    KeyboardComponent response
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = '1','4'
      startVal [time (s)] = 0.0
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = experiment matrix.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'set_size': 16.0, 'present': 1.0, 'C_vs_F': 1.0, 'corrAns': 1},
      {'set_size': 12.0, 'present': 0.0, 'C_vs_F': 1.0, 'corrAns': 4},
      {'set_size': 4.0, 'present': 1.0, 'C_vs_F': 0.0, 'corrAns': 1},
      {'set_size': 16.0, 'present': 1.0, 'C_vs_F': 0.0, 'corrAns': 1},
      {'set_size': 4.0, 'present': 1.0, 'C_vs_F': 0.0, 'corrAns': 1},
      {'set_size': 12.0, 'present': 1.0, 'C_vs_F': 0.0, 'corrAns': 1},
      {'set_size': 16.0, 'present': 1.0, 'C_vs_F': 0.0, 'corrAns': 1},
      {'set_size': 4.0, 'present': 1.0, 'C_vs_F': 0.0, 'corrAns': 1},
      {'set_size': 4.0, 'present': 1.0, 'C_vs_F': 0.0, 'corrAns': 1},
      {'set_size': 8.0, 'present': 1.0, 'C_vs_F': 0.0, 'corrAns': 1},
      {'set_size': 4.0, 'present': 1.0, 'C_vs_F': 1.0, 'corrAns': 1},
      {'set_size': 8.0, 'present': 1.0, 'C_vs_F': 1.0, 'corrAns': 1},
      {'set_size': 8.0, 'present': 1.0, 'C_vs_F': 0.0, 'corrAns': 1},
      {'set_size': 8.0, 'present': 1.0, 'C_vs_F': 1.0, 'corrAns': 1},
      {'set_size': 12.0, 'present': 1.0, 'C_vs_F': 1.0, 'corrAns': 1},
      {'set_size': 16.0, 'present': 1.0, 'C_vs_F': 1.0, 'corrAns': 1},
      {'set_size': 12.0, 'present': 1.0, 'C_vs_F': 0.0, 'corrAns': 1},
      {'set_size': 12.0, 'present': 1.0, 'C_vs_F': 1.0, 'corrAns': 1},
      {'set_size': 16.0, 'present': 1.0, 'C_vs_F': 0.0, 'corrAns': 1},
      {'set_size': 4.0, 'present': 0.0, 'C_vs_F': 0.0, 'corrAns': 4},
      {'set_size': 4.0, 'present': 0.0, 'C_vs_F': 1.0, 'corrAns': 4},
      {'set_size': 16.0, 'present': 1.0, 'C_vs_F': 1.0, 'corrAns': 1},
      {'set_size': 16.0, 'present': 0.0, 'C_vs_F': 1.0, 'corrAns': 4}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
    Routine experiment
  LoopTerminator trials
